PsychoPy2experiment version="2026.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1728, 1117]
  expName = trigger_example
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine trial
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    ImageComponent image
      image [set every repeat] = $"stimuli/"+condition+"/"+image_name+".jpg"
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2.0
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    TextComponent fixation
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    CodeComponent code
      Code Type = Py
      Begin Experiment:
        from digital_trigger import Trigger

        port = Trigger(names=['nature', 'urban'], simulate=True) # or digital_trigger.Trigger( works.
      Each Frame:
        if image.status == STARTED and port.is_closed(condition):
            win.callOnFlip(port.open, condition)

        if image.status == FINISHED and port.is_open(condition):
            win.callOnFlip(port.close, condition)
      End Experiment:
        port.stop()
Flow
  LoopInitiator environment loopType="TrialHandler"
    conditionsFile = conditions.csv
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('condition', 'nature')]),
      OrderedDict([('condition', 'urban')])]
    LoopInitiator images loopType="TrialHandler"
      conditionsFile = $"stimuli/"+condition+".csv"
      loopType = random
      nReps = 1
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      Routine trial
    LoopTerminator images
  LoopTerminator environment
